PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = white
  expName = test
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Routines
  Routine intro
    TextComponent introduction
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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      text:
        欢迎您参加此社会认知与决策相关的实验。

        本实验为您随机生成了一个头像，
        请您填写您的昵称，填写完成后，请点击“下一页”。
    TextboxComponent input_name
      bold = False
      color = black
      editable = True
      font = Songti SC
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent image_myself
      image = img/img_person/myself.png
      pos = (0, -0.15)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_nextbutton
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = image_nextbutton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine phase2
    ImageComponent image
      image = img\bg2.png
      size = (1.65, 0.85)
      startVal [time (s)] = 0.0
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    ImageComponent image_p
      image [set every repeat] = $pic_person
      pos = (-0.7, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent name_py
      color = black
      font = STSong
      letterHeight = 0.04
      pos = (-0.7, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pic_name
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    ButtonComponent button
      bold = True
      color = black
      forceEndRoutine = False
      letterHeight = 0.035
      pos = [-0.70,-0.35]
      size = [0.18,0.08]
      startVal [time (s)] = 0
      text = next
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      callback:
        if textbox.text in list_allowinput and textbox.text not in list_input_num:
            continueRoutine = False
        else:
            continueRoutine = True
            loc_re_x = -0.55
            loc_re_y = -0.15
    TextComponent question
      color = black
      font = STSong
      letterHeight = 0.025
      pos = (-0.65, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = 请输入编号：
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    TextboxComponent textbox
      bold = False
      color = black
      editable = True
      font = STSong
      letterHeight = 0.025
      pos = (-0.6, -0.21)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent grey
      image = img\grey1.png
      pos [set every repeat] = (loc_x[0],loc_y[0])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        list_allowinput = ['1','2','3','4','5','6','7','8','9','10','11','12','13','14','15','16','17','18','19','20','21','22','23','24','25','26','27','28','29','30','31','32','33','34','35','36']
        loc_x = [9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9]
        loc_y = [9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9,9]
        cnt_ind = 0
        list_input_num = []
      Begin Routine:
        loc_re_x  = 9
        loc_re_y =9
      End Routine:
        if textbox.text == '1':
            loc_x[cnt_ind] = -0.505
            loc_y[cnt_ind] = 0.29
        if textbox.text == '2':
            loc_x[cnt_ind] = -0.39
            loc_y[cnt_ind] = 0.29
        if textbox.text == '3':
            loc_x[cnt_ind] = -0.275
            loc_y[cnt_ind] = 0.29
        if textbox.text == '4':
            loc_x[cnt_ind] = -0.16
            loc_y[cnt_ind] = 0.29
        if textbox.text == '5':
            loc_x[cnt_ind] = -0.045
            loc_y[cnt_ind] = 0.29
        if textbox.text == '6':
            loc_x[cnt_ind] = 0.07
            loc_y[cnt_ind] = 0.29
        if textbox.text == '7':
            loc_x[cnt_ind] = 0.185
            loc_y[cnt_ind] = 0.29
        if textbox.text == '8':
            loc_x[cnt_ind] = 0.3
            loc_y[cnt_ind] = 0.29
        if textbox.text == '9':
            loc_x[cnt_ind] = 0.415
            loc_y[cnt_ind] = 0.29
        if textbox.text == '10':
            loc_x[cnt_ind] = 0.53
            loc_y[cnt_ind] = 0.29
        if textbox.text == '11':
            loc_x[cnt_ind] = 0.645
            loc_y[cnt_ind] = 0.29
        if textbox.text == '12':
            loc_x[cnt_ind] = 0.76
            loc_y[cnt_ind] = 0.29

        if textbox.text == '13':
            loc_x[cnt_ind] = -0.505
            loc_y[cnt_ind] = 0.02
        if textbox.text == '14':
            loc_x[cnt_ind] = -0.39
            loc_y[cnt_ind] = 0.02
        if textbox.text == '15':
            loc_x[cnt_ind] = -0.275
            loc_y[cnt_ind] = 0.02
        if textbox.text == '16':
            loc_x[cnt_ind] = -0.16
            loc_y[cnt_ind] = 0.02
        if textbox.text == '17':
            loc_x[cnt_ind] = -0.045
            loc_y[cnt_ind] = 0.02
        if textbox.text == '18':
            loc_x[cnt_ind] = 0.07
            loc_y[cnt_ind] = 0.02
        if textbox.text == '19':
            loc_x[cnt_ind] = 0.185
            loc_y[cnt_ind] = 0.02
        if textbox.text == '20':
            loc_x[cnt_ind] = 0.3
            loc_y[cnt_ind] = 0.02
        if textbox.text == '21':
            loc_x[cnt_ind] = 0.415
            loc_y[cnt_ind] = 0.02
        if textbox.text == '22':
            loc_x[cnt_ind] = 0.53
            loc_y[cnt_ind] = 0.02
        if textbox.text == '23':
            loc_x[cnt_ind] = 0.645
            loc_y[cnt_ind] = 0.02
        if textbox.text == '24':
            loc_x[cnt_ind] = 0.76
            loc_y[cnt_ind] = 0.02


        if textbox.text == '25':
            loc_x[cnt_ind] = -0.505
            loc_y[cnt_ind] = -0.27
        if textbox.text == '26':
            loc_x[cnt_ind] = -0.39
            loc_y[cnt_ind] = -0.27
        if textbox.text == '27':
            loc_x[cnt_ind] = -0.275
            loc_y[cnt_ind] = -0.27
        if textbox.text == '28':
            loc_x[cnt_ind] = -0.16
            loc_y[cnt_ind] = -0.27
        if textbox.text == '29':
            loc_x[cnt_ind] = -0.045
            loc_y[cnt_ind] = -0.27
        if textbox.text == '30':
            loc_x[cnt_ind] = 0.07
            loc_y[cnt_ind] = -0.27
        if textbox.text == '31':
            loc_x[cnt_ind] = 0.185
            loc_y[cnt_ind] = -0.27
        if textbox.text == '32':
            loc_x[cnt_ind] = 0.3
            loc_y[cnt_ind] = -0.27
        if textbox.text == '33':
            loc_x[cnt_ind] = 0.415
            loc_y[cnt_ind] = -0.27
        if textbox.text == '34':
            loc_x[cnt_ind] = 0.53
            loc_y[cnt_ind] = -0.27
        if textbox.text == '35':
            loc_x[cnt_ind] = 0.645
            loc_y[cnt_ind] = -0.27
        if textbox.text == '36':
            loc_x[cnt_ind] = 0.76
            loc_y[cnt_ind] = -0.27


        cnt_ind+=1

        list_input_num.append(textbox.text)
    TextComponent rewrite
      color = black
      font = STSong
      letterHeight = 0.025
      pos [set every frame] = (loc_re_x,loc_re_y)
      startVal [time (s)] = 0.0
      text = 请重新输入
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    ImageComponent grey_1
      image = img\grey1.png
      pos [set every repeat] = (loc_x[1],loc_y[1])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_2
      image = img\grey1.png
      pos [set every repeat] = (loc_x[2],loc_y[2])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_3
      image = img\grey1.png
      pos [set every repeat] = (loc_x[3],loc_y[3])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_4
      image = img\grey1.png
      pos [set every repeat] = (loc_x[4],loc_y[4])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_5
      image = img\grey1.png
      pos [set every repeat] = (loc_x[5],loc_y[5])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_6
      image = img\grey1.png
      pos [set every repeat] = (loc_x[6],loc_y[6])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_7
      image = img\grey1.png
      pos [set every repeat] = (loc_x[7],loc_y[7])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_8
      image = img\grey1.png
      pos [set every repeat] = (loc_x[8],loc_y[8])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_9
      image = img\grey1.png
      pos [set every repeat] = (loc_x[9],loc_y[9])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_10
      image = img\grey1.png
      pos [set every repeat] = (loc_x[10],loc_y[10])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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    ImageComponent grey_11
      image = img\grey1.png
      pos [set every repeat] = (loc_x[11],loc_y[11])
      size = (0.115, 0.31)
      startVal [time (s)] = 0.0
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    ImageComponent grey_12
      image = img\grey1.png
      pos [set every repeat] = (loc_x[12],loc_y[12])
      size = (0.11, 0.26)
      startVal [time (s)] = 0.0
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
  Routine phase3
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        count_num=0
      Begin Routine:
        count_num += 1
        list_1 = [1,2]
        shuffle(list_1)
        if list_1[0] ==2 :
           img_2_loc = pic_left
           img_1_loc = pic_right
        else:
           img_2_loc = pic_right
           img_1_loc = pic_left
      End Routine:
        if count_num >=1 :
            trials_ph3_1.finished = True
    ImageComponent image_ph3Q
      image = img/img_instruction/ph3.png
      pos = (0, 0.27)
      size = (0.9, 0.54)
      startVal [time (s)] = 0.0
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    ImageComponent image_1axis
      image [set every repeat] = $img_1_loc
      pos = (-0.2, 0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_2axis
      image [set every repeat] = $img_2_loc
      pos = (0.2, 0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_leftbutton
      image = img/img_button/1button.jpg
      pos = (-0.2, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_rightbutton
      image = img/img_button/2button.jpg
      pos = (0.2, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_leftbutton,image_rightbutton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_ph3axisnow2
      image = img/img_button/5axis_now.jpg
      pos = (0.2, -0.31)
      size = (0.1, 0.06)
      startVal [time (s)] = 0.0
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    ImageComponent image_ph3axisnow1
      image = img/img_button/5axis_now.jpg
      pos = (-0.2, -0.31)
      size = (0.1, 0.06)
      startVal [time (s)] = 0.0
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  Routine phase4
    TextComponent text_countdown
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $countdownsec
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  Routine personal_info
  Routine stop
    TextComponent text_stop
      color = black
      font = STSong
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 本实验到此结束，感谢参与！
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  Routine phase1_intro
    TextComponent intro2
      color = black
      font = STSong
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        一共有36个实验参与者，现在与您一起同步进行该实验。



        本研究中会通过呈现恐怖图片，来对实验参与者进行威胁刺激。

        现在一共有36种威胁刺激的组合，您需要决定在哪一时间点
        （1-9，每一个时间点代表1min）
        以及多大概率（60%、70%、80%、90%）
        给到其他被试威胁刺激，与此同时其他被试也会决定
        在哪一时间点以及多大概率对你进行威胁刺激，然后
        你需要根据其他被试对你进行的威胁刺激，来评估你
        与他们合作的意向。





        首先会为您呈现2张恐怖图片的示例，请您首先对
        每张图片进行评分。评分没有对错之分，
        每一张图片请不要花费太多时间，最好以您的
        第一感觉作为答案。



        如果您准备好开始实验了，请点击“Next”。
    ButtonComponent button_2
      bold = True
      color = black
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5,-0.4)
      size = (0.2,0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine phase1intro
    ImageComponent image_textphase2intro
      image = phase2_intro.png
      startVal [time (s)] = 0.0
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    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.5)
      size = (0.2,0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine phase1intro_2
    ImageComponent image_phase1intro
      image = img/img_instruction/ph1intro.png
      pos = (0, -0.1)
      size = (1.2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent text_fixation
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine phase1
    ImageComponent image_horrible
      image [set every repeat] = $horriblepic
      size = (0.6, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_evl1
      image = img/img_horriblethreat/hopic_evl0.png
      pos = (0, 0.1)
      size = (1.2,0.2)
      startVal [time (s)] = 5
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    ImageComponent image_3button
      image = img/img_button/3button.jpg
      pos = (0.5, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 5
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    MouseComponent mouse_2
      clickable = image_3button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 5
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    SliderComponent slider_2
      borderColor = black
      forceEndRoutine = False
      granularity = 0.1
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1, 0.05)
      startVal [time (s)] = 5
      styles = rating
      ticks = (1,10)
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    TextComponent text_6
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (-0.5, -0.2)
      startVal [time (s)] = 5
      text = 非常消极
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    TextComponent text_7
      color = black
      font = STSong
      letterHeight = 0.03
      pos = (0.46, -0.2)
      startVal [time (s)] = 5
      text = 一点都不消极
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  Routine horriblepic_evl1
    ImageComponent image_hopic_evl1
      image = hopic_evl1.png
      size = (1.2, 1)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      borderColor = black
      forceEndRoutine = False
      granularity = 7
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine horriblepic_evl2
  Routine phase2intro
    ImageComponent image_phase2intro
      image = img/img_instruction/ph2intro.png
      pos = (0, 0.1)
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_12
      image = img/img_axis/ax5.png
      pos = (0, -0.1)
      size = (0.15, 0.4)
      startVal [time (s)] = 0.0
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  Routine phase4intro
    ImageComponent image_4
      image = img/img_instruction/ph4intro.png
      size = (1.2, 0.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phase3intro
    ImageComponent image_2
      image = img/img_instruction/ph3intro.png
      size = (1.2, 0.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ph4threat_image
    ImageComponent image_5
      image = img/img_horriblethreat/horriblethreatfinal.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine countdown
    TextComponent text_countdownsecond
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $countdownsec
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  Routine fixation2
    TextComponent text_fixation2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine phase3_2
  Routine Phase2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        list_1 = [1,2,3,4,5,6,7,8,9]
        list_2 = [1,2,3,4,5,6,7,8,9]
        list_3 = [1,2,3,4,5,6,7,8,9]
        list_4 = [1,2,3,4,5,6,7,8,9]
        pic_1 = ''
        pic_2 = ''
        pic_3 = ''
        pic_4 = ''
        loc_x_1 = 0
        loc_x_2 = 0
        loc_x_3 = 0
        loc_x_4 = 0
        list_1_remove = []
        list_2_remove = []
        list_3_remove = []
        list_4_remove = []
      Begin Routine:
        list_loc_1 = [-0.35,-0.05,0.25,0.55]
        shuffle(list_1)
        shuffle(list_2)
        shuffle(list_3)
        shuffle(list_4)
        shuffle(list_loc_1)
        loc_x_1 = list_loc_1[0]
        loc_x_2 = list_loc_1[1]
        loc_x_3 = list_loc_1[2]
        loc_x_4 = list_loc_1[3]

        if list_1[0] == 1:
            pic_1 = ph2_pic60_1
            list_1_remove.append(1)

        if list_1[0] == 2:
            pic_1 = ph2_pic60_2
            list_1_remove.append(2)
        if list_1[0] == 3:
            pic_1 = ph2_pic60_3
            list_1_remove.append(3)

        if list_1[0] == 4:
            pic_1 = ph2_pic60_4
            list_1_remove.append(4)

        if list_1[0] == 5:
            pic_1 = ph2_pic60_5
            list_1_remove.append(5)

        if list_1[0] == 6:
            pic_1 = ph2_pic60_6
            list_1_remove.append(6)

        if list_1[0] == 7:
            pic_1 = ph2_pic60_7
            list_1_remove.append(7)

        if list_1[0] == 8:
            pic_1 = ph2_pic60_8
            list_1_remove.append(8)
        if list_1[0] == 9:
            pic_1 = ph2_pic60_9
            list_1_remove.append(9)

        temp_1 = list_1[0]
        temp_2 = list_2[0]
        temp_3 = list_3[0]
        temp_4 = list_4[0]
        if list_2[0] == 1:
            pic_2 = ph2_pic70_1
            list_2_remove.append(1)

        if list_2[0] == 2:
            pic_2 = ph2_pic70_2
            list_2_remove.append(2)

        if list_2[0] == 3:
            pic_2 = ph2_pic70_3
            list_2_remove.append(3)

        if list_2[0] == 4:
            pic_2 = ph2_pic70_4
            list_2_remove.append(4)

        if list_2[0] == 5:
            pic_2 = ph2_pic70_5
            list_2_remove.append(5)

        if list_2[0] == 6:
            pic_2= ph2_pic70_6
            list_2_remove.append(6)

        if list_2[0] == 7:
            pic_2 = ph2_pic70_7
            list_2_remove.append(7)

        if list_2[0] == 8:
            pic_2 = ph2_pic70_8
            list_2_remove.append(8)

        if list_2[0] == 9:
            pic_2 = ph2_pic70_9
            list_2_remove.append(9)

        if list_3[0] == 1:
            pic_3 = ph2_pic80_1
            list_3_remove.append(1)

        if list_3[0] == 2:
            pic_3 = ph2_pic80_2
            list_3_remove.append(2)

        if list_3[0] == 3:
            pic_3 = ph2_pic80_3
            list_3_remove.append(3)

        if list_3[0] == 4:
            pic_3 = ph2_pic80_4
            list_3_remove.append(4)

        if list_3[0] == 5:
            pic_3 = ph2_pic80_5
            list_3_remove.append(5)

        if list_3[0] == 6:
            pic_3 = ph2_pic80_6
            list_3_remove.append(6)

        if list_3[0] == 7:
            pic_3 = ph2_pic80_7
            list_3_remove.append(7)

        if list_3[0] == 8:
            pic_3 = ph2_pic80_8
            list_3_remove.append(8)

        if list_3[0] == 9:
            pic_3 = ph2_pic80_9
            list_3_remove.append(9)

        if list_4[0] == 1:
            pic_4 = ph2_pic90_1
            list_4_remove.append(1)

        if list_4[0] == 2:
            pic_4 = ph2_pic90_2
            list_4_remove.append(2)

        if list_4[0] == 3:
            pic_4 = ph2_pic90_3
            list_4_remove.append(3)

        if list_4[0] == 4:
            pic_4 = ph2_pic90_4
            list_4_remove.append(4)

        if list_4[0] == 5:
            pic_4 = ph2_pic90_5
            list_4_remove.append(5)

        if list_4[0] == 6:
            pic_4 = ph2_pic90_6
            list_4_remove.append(6)

        if list_4[0] == 7:
            pic_4 = ph2_pic90_7
            list_4_remove.append(7)

        if list_4[0] == 8:
            pic_4 = ph2_pic90_8
            list_4_remove.append(8)

        if list_4[0] == 9:
            pic_4 = ph2_pic90_9
            list_4_remove.append(9)
      End Routine:
        list_temp1=[]
        list_temp2=[]
        list_temp3=[]
        list_temp4=[]
        if len(list_1)>1:
            for i in list_1:
                if i not in list_1_remove:
                    list_temp1.append(i)
            list_1 = list_temp1
        if len(list_2)>1:
            for i in list_2:
                if i not in list_2_remove:
                    list_temp2.append(i)
            list_2 = list_temp2
        if len(list_3)>1:
            for i in list_3:
                if i not in list_3_remove:
                    list_temp3.append(i)
            list_3 = list_temp3
        if len(list_4)>1:
            for i in list_4:
                if i not in list_4_remove:
                    list_temp4.append(i)
            list_4 = list_temp4

        thisExp.addData("loc_x_1",loc_x_1)
        thisExp.addData("loc_x_2",loc_x_2)
        thisExp.addData("loc_x_3",loc_x_3)
        thisExp.addData("loc_x_4",loc_x_4)
        thisExp.addData("list_1_remove",list_1_remove)
        thisExp.addData("list_2_remove",list_2_remove)
        thisExp.addData("list_3_remove",list_3_remove)
        thisExp.addData("list_4_remove",list_4_remove)

        print(list_1_remove)
        print(list_2_remove)
        print(list_3_remove)
        print(list_4_remove)
        print(loc_x_1)
        print(loc_x_2)
        print(loc_x_3)
        print(loc_x_4)
    ImageComponent image_phase2instru
      image = img/img_instruction/ph2.png
      pos = (0, 0.1)
      size = (1.5, 0.9)
      startVal [time (s)] = 0.0
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    ImageComponent image_ax1
      image [set every repeat] = $pic_1
      pos [set every repeat] = (loc_x_1,0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_ax2
      image [set every repeat] = $pic_2
      pos [set every repeat] = (loc_x_2,0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_ax3
      image [set every repeat] = $pic_3
      pos [set every repeat] = (loc_x_3,0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_ax4
      image [set every repeat] = $pic_4
      pos [set every repeat] = (loc_x_4,0)
      size = (0.2, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent image_buttonA
      image [set every repeat] = img/img_button_ph2/button_A.jpg
      pos = (-0.35, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_buttonB
      image [set every repeat] = img/img_button_ph2/button_B.jpg
      pos = (-0.05, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_buttonC
      image [set every repeat] = img/img_button_ph2/button_C.jpg
      pos = (0.25, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_buttonD
      image [set every repeat] = img/img_button_ph2/button_D.jpg
      pos = (0.55, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_personpic
      image [set every repeat] = $person_img
      pos = (-0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_A
      clickable = image_buttonA,image_buttonB,image_buttonC,image_buttonD
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    MouseComponent mouse_B
      clickable = image_buttonA,image_buttonB,image_buttonC,image_buttonD
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    MouseComponent mouse_C
      clickable = image_buttonA,image_buttonB,image_buttonC,image_buttonD
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    MouseComponent mouse_D
      clickable = image_buttonA,image_buttonB,image_buttonC,image_buttonD
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_personname
      color = black
      letterHeight = 0.05
      pos = (-0.6, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $person_name
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    ImageComponent image_ph2axisnow1
      image = img/img_button/4axis_now.jpg
      pos = (-0.338, -0.31)
      size = (0.09, 0.055)
      startVal [time (s)] = 0.0
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    ImageComponent image_ph2axisnow2
      image = img/img_button/4axis_now.jpg
      pos = (-0.038, -0.31)
      size = (0.09, 0.055)
      startVal [time (s)] = 0.0
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    ImageComponent image_ph2axisnow3
      image = img/img_button/4axis_now.jpg
      pos = (0.262, -0.31)
      size = (0.09, 0.055)
      startVal [time (s)] = 0.0
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    ImageComponent image_ph2axisnow4
      image = img/img_button/4axis_now.jpg
      pos = (0.562, -0.31)
      size = (0.09, 0.055)
      startVal [time (s)] = 0.0
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  Routine waiting_phase
    TextComponent text
      color = black
      font = STSong
      letterHeight = 0.05
      pos = (0.05, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 其他实验参与者在进入中，请稍候…
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    TextComponent text_1
      color = black
      letterHeight = 0.05
      pos = (-0.06, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $a
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (-0.06, 0)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $b
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (-0.06, 0)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $c
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (-0.06, 0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $d
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    TextComponent text_5
      color = black
      font = STSong
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text =            已经有              名实验参与者进入
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  Routine practice_phase
    ImageComponent image_3
      image = img/img_button_ph2/button_A.jpg
      pos = (-0.3,0)
      size = (0.2,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image = img/img_button_ph2/button_B.jpg
      pos = (0.3,0)
      size = (0.2,0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      clickable = image_3,image_6
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine practice_phase_feedback
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:

        if mouse_4.isPressedIn(image_3):
            axNum=24;
            print(axNum)

        else:
            axNum=28
            print(axNum)
      Each Frame:
        time_left = task_timer.getTime()
        msecs = int(time_left*1000)
        text_clock.text= str(int(msecs))
      End Routine:
        text_clock.setAutoDraw(False)
    ImageComponent image_7
      image [set every repeat] = $'img/img_axis/ax'+str(axNum) + '.png'
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine practice_phase_countdown
  Routine phase3_practicechoice
    ImageComponent imagepracticeAbutton
      image = img/img_button/1button.jpg
      pos = (-0.2, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent imagepracticeBbutton
      image = img/img_button/2button.jpg
      pos = (0.2, -0.4)
      size = (0.18, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      clickable = imagepracticeAbutton,imagepracticeBbutton
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        time_show=0
      End Routine:
        if mouse.isPressedIn(imagepracticeAbutton):
            time_show=7
        else:
            time_show=9
    ImageComponent image_practiceaxis1
      image = img/img_axis/ax27.png
      pos = (-0.2, 0)
      size = (0.2, 0.67)
      startVal [time (s)] = 0.0
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    ImageComponent image_practiceaxis2
      image = img/img_axis/ax36.png
      pos = (0.2, 0)
      size = (0.2, 0.67)
      startVal [time (s)] = 0.0
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    ImageComponent image_11
      image = img/img_instruction/ph3_practiceinstr.png
      pos = (0, 0.29)
      size = (0.8, 0.4)
      startVal [time (s)] = 0.0
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  Routine phase3_practicecountdown
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        text_word = ''
      Begin Routine:
        text_word = str(time_show) + 's'
      End Routine:
        time_show -= 1
    TextComponent text_8
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $text_word
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  Routine phase3_practicepic
    ImageComponent image_10
      image = img/img_horriblethreat/horriblethreatpractice.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine phase3_practiceinstr
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_8
      image = img/img_instruction/ph3_practiceinstr.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine phase3_formalinstr
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_9
      image = img/img_instruction/ph3_formalinstr.png
      size = (1.2, 0.65)
      startVal [time (s)] = 0.0
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  Routine countdownsec
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        countdown_time= 6
      Begin Routine:
        text_word = str(countdown_time) + 's'
      End Routine:
        countdown_time -= 1
    TextComponent text_11
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $countdown_time
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  Routine waiting_phase2
    TextComponent text_9
      color = black
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $person_num1
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    TextComponent text_10
      color = black
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $person_num2
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    TextComponent text_12
      color = black
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $person_num3
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    TextComponent text_13
      color = black
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $person_num4
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    ImageComponent image_14
      image = img/img_instruction/waiting_phase2a.png
      pos = (0, 0.2)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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    ImageComponent image_15
      image = img/img_instruction/waiting_phase2b.png
      pos = (0, -0.15)
      size = (1.7, 0.68)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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  Routine waiting_phase_2next
    ImageComponent image_13
      image = img/img_instruction/waiting_phase2next.png
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = cond/waiting_period.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'a': 0, 'b': None, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': 1, 'b': None, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': 2, 'b': None, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': 3, 'b': None, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': 4, 'b': None, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': 5, 'b': None, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': 6, 'b': None, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': 7, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': 8, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': 9, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': 10, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': 11, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': 12, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': 13, 'c': None, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': None, 'c': 14, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': None, 'c': 15, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': None, 'c': 16, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': None, 'c': 17, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': None, 'c': 18, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': None, 'c': 19, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': None, 'c': 20, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': None, 'c': 21, 'd': None, 'e': None, 'f': None},
      {'a': None, 'b': None, 'c': 22, 'd': None, 'e': None, 'f': None}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
    Routine waiting_phase
  LoopTerminator trials_2
  Routine phase1intro_2
  LoopInitiator trials_horribleimg loopType="TrialHandler"
    conditionsFile = cond/horriblepicture.xlsx
    loopType = random
    nReps = 1
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    Routine fixation
    Routine phase1
  LoopTerminator trials_horribleimg
  Routine phase2intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond/ph2_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ph2_pic60_1': 'img/img_axis/ax1.png', 'ph2_pic60_2': 'img/img_axis/ax5.png', 'ph2_pic60_3': 'img/img_axis/ax9.png', 'ph2_pic60_4': 'img/img_axis/ax13.png', 'ph2_pic60_5': 'img/img_axis/ax17.png', 'ph2_pic60_6': 'img/img_axis/ax21.png', 'ph2_pic60_7': 'img/img_axis/ax25.png', 'ph2_pic60_8': 'img/img_axis/ax29.png', 'ph2_pic60_9': 'img/img_axis/ax33.png', 'ph2_pic70_1': 'img/img_axis/ax2.png', 'ph2_pic70_2': 'img/img_axis/ax6.png', 'ph2_pic70_3': 'img/img_axis/ax10.png', 'ph2_pic70_4': 'img/img_axis/ax14.png', 'ph2_pic70_5': 'img/img_axis/ax18.png', 'ph2_pic70_6': 'img/img_axis/ax22.png', 'ph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,
      {'ph2_pic60_1': 'img/img_axis/ax1.png', 'ph2_pic60_2': 'img/img_axis/ax5.png', 'ph2_pic60_3': 'img/img_axis/ax9.png', 'ph2_pic60_4': 'img/img_axis/ax13.png', 'ph2_pic60_5': 'img/img_axis/ax17.png', 'ph2_pic60_6': 'img/img_axis/ax21.png', 'ph2_pic60_7': 'img/img_axis/ax25.png', 'ph2_pic60_8': 'img/img_axis/ax29.png', 'ph2_pic60_9': 'img/img_axis/ax33.png', 'ph2_pic70_1': 'img/img_axis/ax2.png', 'ph2_pic70_2': 'img/img_axis/ax6.png', 'ph2_pic70_3': 'img/img_axis/ax10.png', 'ph2_pic70_4': 'img/img_axis/ax14.png', 'ph2_pic70_5': 'img/img_axis/ax18.png', 'ph2_pic70_6': 'img/img_axis/ax22.png', 'ph2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,
      {'ph2_pic60_1': 'img/img_axis/ax1.png', 'ph2_pic60_2': 'img/img_axis/ax5.png', 'ph2_pic60_3': 'img/img_axis/ax9.png', 'ph2_pic60_4': 'img/img_axis/ax13.png', 'ph2_pic60_5': 'img/img_axis/ax17.png', 'ph2_pic60_6': 'img/img_axis/ax21.png', 'ph2_pic60_7': 'img/img_axis/ax25.png', 'ph2_pic60_8': 'img/img_axis/ax29.png', 'ph2_pic60_9': 'img/img_axis/ax33.png', 'ph2_pic70_1': 'img/img_axis/ax2.png', 'ph2_pic70_2': 'img/img_axis/ax6.png', 'ph2_pic70_3': 'img/img_axis/ax10.png', 'ph2_pic70_4': 'img/img_axis/ax14.png', 'ph2_pic70_5': 'img/img_axis/ax18.png', 'ph2_pic70_6': 'img/img_axis/ax22.png', 'ph2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,
      {'ph2_pic60_1': 'img/img_axis/ax1.png', 'ph2_pic60_2': 'img/img_axis/ax5.png', 'ph2_pic60_3': 'img/img_axis/ax9.png', 'ph2_pic60_4': 'img/img_axis/ax13.png', 'ph2_pic60_5': 'img/img_axis/ax17.png', 'ph2_pic60_6': 'img/img_axis/ax21.png', 'ph2_pic60_7': 'img/img_axis/ax25.png', 'ph2_pic60_8': 'img/img_axis/ax29.png', 'ph2_pic60_9': 'img/img_axis/ax33.png', 'ph2_pic70_1': 'img/img_axis/ax2.png', 'ph2_pic70_2': 'img/img_axis/ax6.png', 'ph2_pic70_3': 'img/img_axis/ax10.png', 'ph2_pic70_4': 'img/img_axis/ax14.png', 'ph2_pic70_5': 'img/img_axis/ax18.png', 'ph2_pic70_6': 'img/img_axis/ax22.png', 'ph2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
    Routine Phase2
  LoopTerminator trials
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = cond/waiting_p2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'person_num1': 11, 'person_num2': 10, 'person_num3': 9, 'person_num4': 8},
      {'person_num1': 7, 'person_num2': 6, 'person_num3': 5, 'person_num4': 4},
      {'person_num1': 3, 'person_num2': 2, 'person_num3': 1, 'person_num4': 0}]
    Routine waiting_phase2
  LoopTerminator trials_5
  Routine waiting_phase_2next
  Routine phase3intro
  Routine phase3_practicechoice
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = time_show
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    Routine phase3_practicecountdown
  LoopTerminator trials_3
  Routine phase3_practicepic
  Routine phase3_formalinstr
  LoopInitiator trials_ph3_2 loopType="TrialHandler"
    conditionsFile = cond/tabletotal.xlsx
    loopType = random
    nReps = 1
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    LoopInitiator trials_ph3_1 loopType="TrialHandler"
      conditionsFile = $excel
      loopType = random
      nReps = 1
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      Routine fixation2
      Routine phase3
    LoopTerminator trials_ph3_1
  LoopTerminator trials_ph3_2
  Routine phase4intro
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = countdown_time
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    Routine countdownsec
  LoopTerminator trials_4
  Routine ph4threat_image
  Routine stop
